<CompuCell3D Revision="2" Version="4.5.0">
   
   <Metadata>
      
      <!-- Basic properties simulation -->
      <NumberOfProcessors>1</NumberOfProcessors>
      <DebugOutputFrequency>10</DebugOutputFrequency>
      <!-- <NonParallelModule Name="Potts"/> -->
   </Metadata>
   
   <Potts>
      
      <!-- Basic properties of CPM (GGH) algorithm -->
      <Dimensions x="256" y="256" z="1"/>
      <Steps>100000</Steps>
      <Temperature>100.0</Temperature>
      <NeighborOrder>1</NeighborOrder>
   </Potts>
   
   <Plugin Name="CellType">
      
      <!-- Listing all cell types in the simulation -->
      <CellType TypeId="0" TypeName="Medium"/>
      <CellType TypeId="1" TypeName="A"/>
      <CellType TypeId="2" TypeName="B"/>
      <CellType TypeId="3" TypeName="C"/>
   </Plugin>
   
   <Plugin Name="Volume">
      <!-- <VolumeEnergyParameters CellType="A" LambdaVolume="2.0" TargetVolume="100"/> -->
      <!-- <VolumeEnergyParameters CellType="B" LambdaVolume="2.0" TargetVolume="100"/> -->
      <!-- <VolumeEnergyParameters CellType="C" LambdaVolume="2.0" TargetVolume="100"/> -->
   </Plugin>
   
   <Plugin Name="Surface">
      <!-- <SurfaceEnergyParameters CellType="A" LambdaSurface="2.0" TargetSurface="24"/> -->
      <!-- <SurfaceEnergyParameters CellType="B" LambdaSurface="2.0" TargetSurface="24"/> -->
      <!-- <SurfaceEnergyParameters CellType="C" LambdaSurface="2.0" TargetSurface="24"/> -->
   </Plugin>
   
   <Plugin Name="CenterOfMass">
      
      <!-- Module tracking center of mass of each cell -->
   </Plugin>
   
   <Plugin Name="NeighborTracker">
      
      <!-- Module tracking neighboring cells of each cell -->
   </Plugin>
   
   <Plugin Name="Contact">
      <!-- Specification of adhesion energies -->
      <Energy Type1="Medium" Type2="Medium">10.0</Energy>
      <Energy Type1="Medium" Type2="A">1.0</Energy>
      <Energy Type1="Medium" Type2="B">1.0</Energy>
      <Energy Type1="Medium" Type2="C">1.0</Energy>
      <Energy Type1="A" Type2="A">10.0</Energy>
      <Energy Type1="A" Type2="B">10.0</Energy>
      <Energy Type1="A" Type2="C">10.0</Energy>
      <Energy Type1="B" Type2="B">10.0</Energy>
      <Energy Type1="B" Type2="C">10.0</Energy>
      <Energy Type1="C" Type2="C">10.0</Energy>
      <NeighborOrder>8</NeighborOrder>
   </Plugin>
   
   <!-- <Steppable Type="BlobInitializer"> -->
      
      <!-- &lt;!&ndash; Initial layout of cells in the form of spherical (circular in 2D) blob &ndash;&gt;  -->


      <!-- <Region> -->
         <!-- <Center x="128" y="128" z="0"/> -->
         <!-- <Radius>51</Radius> -->
         <!-- <Gap>0</Gap> -->
         <!-- <Width>7</Width> -->
         <!-- <Types>A,B,C</Types> -->
      <!-- </Region> -->
   <!-- </Steppable> -->
</CompuCell3D>
