<CompuCell3D Revision="2" Version="4.5.0">
   
   <Metadata>
      
      <!-- Basic properties simulation -->
      <NumberOfProcessors>1</NumberOfProcessors>
      <DebugOutputFrequency>10</DebugOutputFrequency>
      <!-- <NonParallelModule Name="Potts"/> -->
   </Metadata>
   
   <Potts>
      
      <!-- Basic properties of CPM (GGH) algorithm -->
      <Dimensions x="256" y="256" z="1"/>
      <Steps>100000</Steps>
      <Temperature>10.0</Temperature>
      <NeighborOrder>1</NeighborOrder>
   </Potts>
   
   <Plugin Name="CellType">
      
      <!-- Listing all cell types in the simulation -->
      <CellType TypeId="0" TypeName="Medium"/>
      <CellType TypeId="1" TypeName="A"/>
      <CellType TypeId="2" TypeName="B"/>
   </Plugin>
   
   <Plugin Name="Volume">
      <VolumeEnergyParameters CellType="A" LambdaVolume="2.0" TargetVolume="50"/>
      <VolumeEnergyParameters CellType="B" LambdaVolume="2.0" TargetVolume="50"/>
   </Plugin>
   
   <Plugin Name="Surface">
      <SurfaceEnergyParameters CellType="A" LambdaSurface="2.0" TargetSurface="50"/>
      <SurfaceEnergyParameters CellType="B" LambdaSurface="2.0" TargetSurface="50"/>
   </Plugin>
   
   
   <Plugin Name="CenterOfMass">
      
      <!-- Module tracking center of mass of each cell -->
   </Plugin>
   
   <Plugin Name="NeighborTracker">
      
      <!-- Module tracking neighboring cells of each cell -->
   </Plugin>
   
   <Plugin Name="Contact">
      <!-- Specification of adhesion energies -->
      <Energy Type1="Medium" Type2="Medium">10.0</Energy>
      <Energy Type1="Medium" Type2="A">10.0</Energy>
      <Energy Type1="Medium" Type2="B">10.0</Energy>
      <Energy Type1="A" Type2="A">10.0</Energy>
      <Energy Type1="A" Type2="B">10.0</Energy>
      <Energy Type1="B" Type2="B">10.0</Energy>
      <NeighborOrder>4</NeighborOrder>
   </Plugin>
   
   <Plugin Name="Chemotaxis">
      <!-- You may repeat ChemicalField element for each chemical field declared in the PDE solvers -->
      <!-- Specification of chemotaxis properties of select cell types. -->
      <ChemicalField Source="DiffusionSolverFE" Name="M">
         <ChemotaxisByType Lambda="10000.0" Type="A"/>
      </ChemicalField>
   </Plugin>
   
   <Steppable Type="DiffusionSolverFE">
      
      <!-- Specification of PDE solvers -->
      <DiffusionField Name="M">
         <DiffusionData>
            <FieldName>M</FieldName>
            <GlobalDiffusionConstant>0.1</GlobalDiffusionConstant>
            <GlobalDecayConstant>1e-05</GlobalDecayConstant>
            <!-- Additional options are: -->
            <!-- <InitialConcentrationExpression>x*y</InitialConcentrationExpression> -->
            <!-- <ConcentrationFileName>INITIAL CONCENTRATION FIELD - typically a file with path Simulation/NAME_OF_THE_FILE.txt</ConcentrationFileName> -->
            <DiffusionCoefficient CellType="A">0.1</DiffusionCoefficient>
            <DiffusionCoefficient CellType="B">0.1</DiffusionCoefficient>
            <DecayCoefficient CellType="A">0.0001</DecayCoefficient>
            <DecayCoefficient CellType="B">0.0001</DecayCoefficient>
         </DiffusionData>
         <SecretionData>
            <!-- When secretion is defined inside DissufionSolverFE all secretion constants are scaled automaticaly to account for the extra calls to the diffusion step when handling large diffusion constants -->
            
            <!-- Uniform secretion Definition -->
            <!-- <Secretion Type="A">0.1</Secretion> -->
            <!-- <Secretion Type="B">0.1</Secretion> -->
            <!-- <SecretionOnContact SecreteOnContactWith="A,B" Type="B">0.2</SecretionOnContact> -->
            <!-- <ConstantConcentration Type="B">0.1</ConstantConcentration> -->
         </SecretionData>
         <BoundaryConditions>
            <Plane Axis="X">
               <!-- <ConstantDerivative PlanePosition="Min" Value="0.0"/> -->
               <!-- <ConstantDerivative PlanePosition="Max" Value="0.0"/> -->
               <!-- Other options are (examples): -->
               <!-- <Periodic/> -->
               <ConstantValue PlanePosition="Min" Value="1.0"/>
               <ConstantValue PlanePosition="Max" Value="1.0"/>
            </Plane>
            <Plane Axis="Y">
               <!-- <ConstantDerivative PlanePosition="Min" Value="0.0"/> -->
               <!-- <ConstantDerivative PlanePosition="Max" Value="0.0"/> -->
               <!-- Other options are (examples): -->
               <!-- <Periodic/> -->
               <ConstantValue PlanePosition="Min" Value="1.0"/>
               <ConstantValue PlanePosition="Max" Value="1.0"/>
            </Plane>
         </BoundaryConditions>
      </DiffusionField>
   </Steppable>
   

   
   <Steppable Type="UniformInitializer">
      
      <!-- Initial layout of cells in the form of rectangular slab -->
      <Region>
         <BoxMin x="51" y="51" z="0"/>
         <BoxMax x="204" y="204" z="1"/>
         <Gap>0</Gap>
         <Width>7</Width>
         <Types>A,B</Types>
      </Region>
   </Steppable>
</CompuCell3D>
