<CompuCell3D Revision="2" Version="4.5.0">
   
   <Metadata>
      
      <!-- Basic properties simulation -->
      <NumberOfProcessors>1</NumberOfProcessors>
      <DebugOutputFrequency>10</DebugOutputFrequency>
      <!-- <NonParallelModule Name="Potts"/> -->
   </Metadata>
   
   <Potts>
      
      <!-- Basic properties of CPM (GGH) algorithm -->
      <Dimensions x="256" y="256" z="1"/>
      <Steps>100000</Steps>
      <Temperature>100.0</Temperature>
      <NeighborOrder>1</NeighborOrder>
   </Potts>
   
   <Plugin Name="CellType">
      
      <!-- Listing all cell types in the simulation -->
      <CellType TypeId="0" TypeName="Medium"/>
      <CellType TypeId="1" TypeName="E"/>
      <CellType TypeId="2" TypeName="N"/>
      <CellType TypeId="3" TypeName="B"/>
   </Plugin>
   
   <Plugin Name="Volume"></Plugin>
   
   <Plugin Name="Surface"></Plugin>

   
   <Plugin Name="CenterOfMass">
      
      <!-- Module tracking center of mass of each cell -->
   </Plugin>
   
   <Plugin Name="NeighborTracker">
      
      <!-- Module tracking neighboring cells of each cell -->
   </Plugin>
   
   <Plugin Name="Contact">
      <!-- Specification of adhesion energies -->
      <Energy Type1="Medium" Type2="Medium">100.0</Energy>
      <Energy Type1="Medium" Type2="E">30.0</Energy>
      <Energy Type1="Medium" Type2="N">30.0</Energy>
      <Energy Type1="Medium" Type2="B">30.0</Energy>
      <Energy Type1="E" Type2="E">10.0</Energy>
      <Energy Type1="E" Type2="N">100.0</Energy>
      <Energy Type1="E" Type2="B">100.0</Energy>
      <Energy Type1="N" Type2="N">100.0</Energy>
      <Energy Type1="N" Type2="B">100.0</Energy>
      <Energy Type1="B" Type2="B">100.0</Energy>
      <NeighborOrder>4</NeighborOrder>
   </Plugin>
   
   <Plugin Name="ContactInternal">
      <!-- Specification of internal adhesion energies -->
      <Energy Type1="Medium" Type2="Medium">100.0</Energy>
      <Energy Type1="Medium" Type2="E">30.0</Energy>
      <Energy Type1="Medium" Type2="N">30.0</Energy>
      <Energy Type1="Medium" Type2="B">30.0</Energy>
      <Energy Type1="E" Type2="E">100.0</Energy>
      <Energy Type1="E" Type2="N">100.0</Energy>
      <Energy Type1="E" Type2="B">10.0</Energy>
      <Energy Type1="N" Type2="N">100.0</Energy>
      <Energy Type1="N" Type2="B">10.0</Energy>
      <Energy Type1="B" Type2="B">100.0</Energy>
      <NeighborOrder>4</NeighborOrder>
   </Plugin>
   
<Plugin Name="FocalPointPlasticity">
   
   <!-- Specification of focal point junctions -->
   <!-- We separetely specify links between members of same cluster - InternalParameters and members of different clusters Parameters. When not using compartmental  cells comment out InternalParameters specification -->
   <!-- To modify FPP links individually for each cell pair uncomment line below -->
   <!-- <Local/> -->
   <!-- Note that even though you may manipulate lambdaDistance, targetDistance and maxDistance using Python you still need to set activation energy from XML level -->
   <!-- See CC3D manual for details on FPP plugin  -->
   

   
   <InternalParameters Type1="E" Type2="B">
      <Lambda>1000</Lambda>
      <ActivationEnergy>-100</ActivationEnergy>
      <TargetDistance>22</TargetDistance>
      <MaxDistance>24</MaxDistance>
      <MaxNumberOfJunctions NeighborOrder="1">2</MaxNumberOfJunctions>
   </InternalParameters>
  
   
   <InternalParameters Type1="N" Type2="B">
      <Lambda>1000</Lambda>
      <ActivationEnergy>-100</ActivationEnergy>
      <TargetDistance>22</TargetDistance>
      <MaxDistance>24</MaxDistance>
      <MaxNumberOfJunctions NeighborOrder="1">2</MaxNumberOfJunctions>
   </InternalParameters>

   
   <NeighborOrder>1</NeighborOrder>
</Plugin>


   <!-- <Steppable Type="UniformInitializer"> -->
      
      <!-- &lt;!&ndash; Initial layout of cells in the form of rectangular slab &ndash;&gt;  -->


      <!-- <Region> -->
         <!-- <BoxMin x="51" y="51" z="0"/> -->
         <!-- <BoxMax x="204" y="204" z="1"/> -->
         <!-- <Gap>0</Gap> -->
         <!-- <Width>7</Width> -->
         <!-- <Types>E,N,B</Types> -->
      <!-- </Region> -->
   <!-- </Steppable> -->
</CompuCell3D>
