<CompuCell3D Revision="2" Version="4.5.0">
   
   <Metadata>
      
      <!-- Basic properties simulation -->
      <NumberOfProcessors>1</NumberOfProcessors>
      <DebugOutputFrequency>10</DebugOutputFrequency>
      <!-- <NonParallelModule Name="Potts"/> -->
   </Metadata>
   
   <Potts>
      
      <!-- Basic properties of CPM (GGH) algorithm -->
      <Dimensions x="256" y="256" z="1"/>
      <Steps>100000</Steps>
      <Temperature>100.0</Temperature>
      <NeighborOrder>1</NeighborOrder>
   </Potts>
   
   <Plugin Name="CellType">
      
      <!-- Listing all cell types in the simulation -->
      <CellType TypeId="0" TypeName="Medium"/>
      <CellType TypeId="1" TypeName="L"/>
      <CellType TypeId="2" TypeName="B"/>
      <CellType TypeId="3" TypeName="N"/>
   </Plugin>
   
   <Plugin Name="Volume"></Plugin>
   
   <Plugin Name="Surface"></Plugin>
   
   <Plugin Name="CenterOfMass">
      
      <!-- Module tracking center of mass of each cell -->
   </Plugin>
   
   <Plugin Name="NeighborTracker">
      
      <!-- Module tracking neighboring cells of each cell -->
   </Plugin>
   
   <Plugin Name="Contact">
      <!-- Specification of adhesion energies -->
      <Energy Type1="Medium" Type2="Medium">100.0</Energy>
      <Energy Type1="Medium" Type2="L">10.0</Energy>
      <Energy Type1="Medium" Type2="B">10.0</Energy>
      <Energy Type1="Medium" Type2="N">30.0</Energy>
      <Energy Type1="L" Type2="L">10.0</Energy>
      <Energy Type1="L" Type2="B">10.0</Energy>
      <Energy Type1="L" Type2="N">30.0</Energy>
      <Energy Type1="B" Type2="B">10.0</Energy>
      <Energy Type1="B" Type2="N">10.0</Energy>
      <Energy Type1="N" Type2="N">10.0</Energy>
      <NeighborOrder>4</NeighborOrder>
   </Plugin>
   
   <Plugin Name="ContactInternal">
      <!-- Specification of internal adhesion energies -->
      <Energy Type1="Medium" Type2="Medium">100.0</Energy>
      <Energy Type1="Medium" Type2="L">10.0</Energy>
      <Energy Type1="Medium" Type2="B">10.0</Energy>
      <Energy Type1="Medium" Type2="N">30.0</Energy>
      <Energy Type1="L" Type2="L">10.0</Energy>
      <Energy Type1="L" Type2="B">10.0</Energy>
      <Energy Type1="L" Type2="N">30.0</Energy>
      <Energy Type1="B" Type2="B">10.0</Energy>
      <Energy Type1="B" Type2="N">10.0</Energy>
      <Energy Type1="N" Type2="N">10.0</Energy>
      <NeighborOrder>4</NeighborOrder>
   </Plugin>
   
   
   
   <!-- <Steppable Type="UniformInitializer"> -->
      
      <!-- &lt;!&ndash; Initial layout of cells in the form of rectangular slab &ndash;&gt;  -->


      <!-- <Region> -->
         <!-- <BoxMin x="51" y="51" z="0"/> -->
         <!-- <BoxMax x="204" y="204" z="1"/> -->
         <!-- <Gap>0</Gap> -->
         <!-- <Width>7</Width> -->
         <!-- <Types>L,B,N</Types> -->
      <!-- </Region> -->
   <!-- </Steppable> -->
</CompuCell3D>
