<CompuCell3D Revision="2" Version="4.5.0">
   
   <Metadata>
      
      <!-- Basic properties simulation -->
      <NumberOfProcessors>1</NumberOfProcessors>
      <DebugOutputFrequency>10</DebugOutputFrequency>
      <!-- <NonParallelModule Name="Potts"/> -->
   </Metadata>
   
   <Potts>
      
      <!-- Basic properties of CPM (GGH) algorithm -->
      <Dimensions x="256" y="256" z="1"/>
      <Steps>100000</Steps>
      <Temperature>10.0</Temperature>
      <NeighborOrder>1</NeighborOrder>
   </Potts>
   
   <Plugin Name="Connectivity">
   <Penalty>10000</Penalty>
   </Plugin>

   
   
   <Plugin Name="CellType">
      
      <!-- Listing all cell types in the simulation -->
      <CellType TypeId="0" TypeName="Medium"/>
      <CellType TypeId="1" TypeName="A"/>
      <CellType TypeId="2" TypeName="B"/>
      <CellType TypeId="3" TypeName="C"/>
   </Plugin>
   
   <Plugin Name="Volume"></Plugin>
   
   <Plugin Name="Surface"></Plugin>
   
   <Plugin Name="CenterOfMass">
      
      <!-- Module tracking center of mass of each cell -->
   </Plugin>
   
   <Plugin Name="NeighborTracker">
      
      <!-- Module tracking neighboring cells of each cell -->
   </Plugin>
   
   <Plugin Name="Contact">
      <!-- Specification of adhesion energies -->
      <Energy Type1="Medium" Type2="Medium">10.0</Energy>
      <Energy Type1="Medium" Type2="A">30.0</Energy>
      <Energy Type1="Medium" Type2="B">30.0</Energy>
      <Energy Type1="Medium" Type2="C">30.0</Energy>
      <Energy Type1="A" Type2="A">10.0</Energy>
      <Energy Type1="A" Type2="B">10.0</Energy>
      <Energy Type1="A" Type2="C">5.0</Energy>
      <Energy Type1="B" Type2="B">10.0</Energy>
      <Energy Type1="B" Type2="C">5.0</Energy>
      <Energy Type1="C" Type2="C">5.0</Energy>
      <NeighborOrder>4</NeighborOrder>
   </Plugin>
   
   <Plugin Name="Chemotaxis">
      <!-- You may repeat ChemicalField element for each chemical field declared in the PDE solvers -->
      <!-- Specification of chemotaxis properties of select cell types. -->
      <ChemicalField Source="DiffusionSolverFE" Name="ATTR">
         <ChemotaxisByType Lambda="10.0" Type="C"/>
      </ChemicalField>
   </Plugin>
   
      <Steppable Type="DiffusionSolverFE">
      
      <!-- Specification of PDE solvers -->
      <DiffusionField Name="ATTR">
         <DiffusionData>
            <FieldName>ATTR</FieldName>
            <GlobalDiffusionConstant>0.1</GlobalDiffusionConstant>
            <GlobalDecayConstant>0.001</GlobalDecayConstant>
            <!-- Additional options are: -->
            <!-- <InitialConcentrationExpression>x*y</InitialConcentrationExpression> -->
            <!-- <ConcentrationFileName>INITIAL CONCENTRATION FIELD - typically a file with path Simulation/NAME_OF_THE_FILE.txt</ConcentrationFileName> -->
            <DiffusionCoefficient CellType="A">0.1</DiffusionCoefficient>
            <DiffusionCoefficient CellType="B">0.1</DiffusionCoefficient>
            <DiffusionCoefficient CellType="C">0.1</DiffusionCoefficient>
            <DecayCoefficient CellType="A">0.0</DecayCoefficient>
            <DecayCoefficient CellType="B">0.0</DecayCoefficient>
            <DecayCoefficient CellType="C">0.0</DecayCoefficient>
         </DiffusionData>
         <SecretionData>
            <!-- When secretion is defined inside DissufionSolverFE all secretion constants are scaled automaticaly to account for the extra calls to the diffusion step when handling large diffusion constants -->
            
            <!-- Uniform secretion Definition -->
            <Secretion Type="A">1</Secretion>
            <!-- <Secretion Type="B">0.1</Secretion> -->
            <!-- <SecretionOnContact SecreteOnContactWith="A,B" Type="B">0.2</SecretionOnContact> -->
            <!-- <ConstantConcentration Type="B">0.1</ConstantConcentration> -->
         </SecretionData>
         <BoundaryConditions>
            <Plane Axis="X">
               <!-- <ConstantDerivative PlanePosition="Min" Value="0.0"/> -->
               <!-- <ConstantDerivative PlanePosition="Max" Value="0.0"/> -->
               <!-- Other options are (examples): -->
               <!-- <Periodic/> -->
               <ConstantValue PlanePosition="Min" Value="0.0"/>
               <ConstantValue PlanePosition="Max" Value="0.0"/>
            </Plane>
            <Plane Axis="Y">
               <!-- <ConstantDerivative PlanePosition="Min" Value="0.0"/> -->
               <!-- <ConstantDerivative PlanePosition="Max" Value="0.0"/> -->
               <!-- Other options are (examples): -->
               <!-- <Periodic/> -->
               <ConstantValue PlanePosition="Min" Value="0.0"/>
               <ConstantValue PlanePosition="Max" Value="0.0"/>
            </Plane>
         </BoundaryConditions>
      </DiffusionField>
   </Steppable>
   
   <Steppable Type="BlobInitializer">
      
      <!-- Initial layout of cells in the form of spherical (circular in 2D) blob -->
      <Region>
         <Center x="128" y="128" z="0"/>
         <Radius>80</Radius>
         <Gap>0</Gap>
         <Width>20</Width>
         <Types>A,B,C</Types>
      </Region>
   </Steppable>
</CompuCell3D>
